CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D:No
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    Select the rule criteria:and (file does contain "_w1")
    Name to assign these images:Nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_w3")
    Name to assign these images:Dendrites
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Log transform (base 2)
    Raise the power of the result by:.2
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Dendrites
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:6|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
    Input:Nuclei
    Object:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,200
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:7|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enabled:False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
    Input:Dendrites
    Object:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):10,400
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Input:Dendrites
    Output:FilteredDendrites
    Select the operation:Enhance
    Feature size:6
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Line structures
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
ApplyThreshold:[module_num:9|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
    Input:FilteredDendrites
    Output:ApplyThreshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.25
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

MedianFilter:[module_num:10|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
    Input:ApplyThreshold
    Output:MedianFilter
    Window:5

Morph:[module_num:11|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
    Select the input image:MedianFilter
    Name the output image:MorphBlue
    Select the operation to perform:bridge
    Number of times to repeat operation:Forever
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
IdentifySecondaryObjects:[module_num:12|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cytoplasm
    Select the method to identify the secondary objects:Propagation
    Select the input image:MorphBlue
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    Regularization factor:0.1
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:5
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    Thresholding method:Otsu

OverlayObjects:[module_num:13|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
    Input:ImageAfterMath
    Output:OverlayObjects
    Objects:Cytoplasm
    Opacity:0.3

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:Dendrites
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:15|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
    Select the input objects:Cytoplasm
    Name the output image:CellImage
    Select the color format:Grayscale
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Dendrites
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:17|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Dendrites
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
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
MaskImage:[module_num:18|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enabled:False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
    Select the input image:Actinin
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

MaskObjects:[module_num:19|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enabled:False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
    Select objects to be masked:Cytoplasm
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cytoplasm
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:20|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enabled:False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
    Input:Actinin
    Output:Filtered
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Tubeness
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
ApplyThreshold:[module_num:21|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enabled:False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
    Input:Filtered
    Output:Thresh
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:(0.0, 1.0)
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
Morph:[module_num:22|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enabled:False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
    Select the input image:Thresh
    Name the output image:Morphed
    Select the operation to perform:skelpe
    Number of times to repeat operation:Once
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